PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s' % (expInfo['participant']) + '/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'],expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'sex at birth': '', 'dominant hand': '', 'instructions': '1', 'realRuns': '0', 'runNumber': 'trials_1.csv'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = Working memory load
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Routines
  Routine trial
    ImageComponent stim1
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim2
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim3
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    ImageComponent stim4
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    PolygonComponent fixDelay
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 13
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    ImageComponent probe
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 16.5
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    PolygonComponent fixProbe
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 17.7
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp
      allowedKeys = 'b','y','None'
      correctAns = $correctResp
      forceEndRoutine = False
      startVal [time (s)] = 16.5
      stopVal [duration (s)] = 4.2
      store = first key
      storeCorrect = True
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    CodeComponent setNumCorrectRun
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            number_correct = 0
    ImageComponent mask1_run
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_prac_2
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_run
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_run
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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  Routine blankStart
    PolygonComponent fixStart
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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  Routine blankEnd
    PolygonComponent fixEnd
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        percent_correct = str(round(number_correct/ntotal*100,2))
  Routine trialEndBlank
    PolygonComponent fixStartTrial
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent countCorrectRun
      Code Type = Auto->JS
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      End Routine:
        if keyResp.corr:
            number_correct = number_correct + 1
            ntotal=ntotal+1
        else:
            ntotal=ntotal+1
  Routine Before_run
    TextComponent text_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Der nächste Durchgang startet gleich ...
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    KeyboardComponent trigger1
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numberCorrect_Reset
      Code Type = Auto->JS
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      Before Experiment:
        import subprocess
        subprocess.call(['sh', './gitHashRun.sh'])
      Begin Routine:
        number_correct = 0
        ntotal=0
  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Experiment!
        (Drücke bitte eine Taste)
    KeyboardComponent space1
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
      Begin Routine:
        if keyResp_Practice.corr:
            msg="Richtige"
            number_correct = number_correct+1
            ntotal=ntotal+1
        else:
            msg="Falsch"
            ntotal=ntotal+1
    TextComponent feedbackText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg
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    CodeComponent totalCorrect
      Code Type = Auto->JS
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      End Routine:
        percent_correct = str(round(number_correct/ntotal*100,2))
  Routine Instr1
    TextComponent Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    KeyboardComponent space2
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_Instr
    ImageComponent stim1_inst
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim2_inst
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim3_inst
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent stim4_inst
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent trialExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Hier musst du dir ein Bild merken und die übrigen Muster ignorieren.
    KeyboardComponent space3
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delayInst
    PolygonComponent fixDelay_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    TextComponent delayExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Das rote Kreuz markiert die Periode in der du die dir gezeigten Bilder im Kopf behalten solltest.
        Während dieser Zeit sind keine Antworten möglich.
    KeyboardComponent space4
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responseInst
    ImageComponent probe_inst
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    PolygonComponent fixProbe_inst
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.5
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    KeyboardComponent reponseInstr
      allowedKeys = 'b','y'
      correctAns = $correctResp
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent probeInst
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 2.5
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      text:
        Das war das Probebild. In diesem Fall gehörte es zu den zu merkenden Bildern. Bitte drücke die entsprechende Taste um weiterzumachen. Du kannst immer antworten sobald das Probebild erscheint und musst nicht auf das grüne Kreuz warten.
  Routine reward
    TextComponent rewardInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Super!
        Lass uns einige Versuchsdurchgänge probieren um sicherzugehen, dass du die Aufgabe verstanden hast.
        (Drücke bitte eine Taste)
    KeyboardComponent space5
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedbackTest
    KeyboardComponent key_resp_5
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $' Wenn du über 70% Richtig hast kannst du mit dem eigentlichen Experiment beginnen. Ansonsten musst du noch etwas mehr üben. Du hattest '+percent_correct+'% richtig.'
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    CodeComponent calculateTotalPerformance
      Code Type = Auto->JS
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      Begin Routine:
        if number_correct/(trials_instr2.nTotal) >= 0.63:
            repeat_InstrTrials.finished = True
  Routine reminderButtons
    TextComponent Button_reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Zur Erinnerung:
        Linke Taste, wenn das Probebild Teil der zu merkeneden Bilder war
        Rechte Taste, wenn das Probebild nicht Teil der zu merkenden Bilder war
        (Drücke eine Taste um mit den Probedurchgängen zu beginnen)
    KeyboardComponent space6
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numCorrect
      Code Type = Auto->JS
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      Begin Routine:
        number_correct = 0
        ntotal=0
  Routine trialBegBlank_practice
    PolygonComponent fixStartTrial_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trial_practice
    ImageComponent stim1_Practice
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim2_Practice
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim3_Practice
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    ImageComponent stim4_Practice
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    PolygonComponent fixDelay_Practice
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 13
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    ImageComponent probe_Practice
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 16.5
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    PolygonComponent fixProbe_Practice
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 17.7
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp_Practice
      allowedKeys = 'b','y','None'
      correctAns = $correctResp
      forceEndRoutine = False
      startVal [time (s)] = 16.5
      stopVal [duration (s)] = 4.2
      store = first key
      storeCorrect = True
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    ImageComponent mask1_prac
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_prac
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_prac
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_prac
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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  Routine feedback_Run
    KeyboardComponent space_Run
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feedbackTxtRun
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Du hattest '+percent_correct+'% richtig.'
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  Routine finalRoutine
    KeyboardComponent space_final
      allowedKeys = 'b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent txt_final
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Vielen Dank! Das Experiment ist zu Ende.
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  Routine masks_Instr
    ImageComponent mask1_inst
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_inst
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_inst
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_inst
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  LoopInitiator dontSkipInstructions loopType="TrialHandler"
    loopType = random
    nReps = $expInfo['instructions']
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    Routine Welcome
    LoopInitiator instructionLoop loopType="TrialHandler"
      conditionsFile = instructionTxtDE.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructions', 'In jedem Versuchsdurchgang ist es deine Aufgabe, dir die jeweils am Anfang gezeigten Bilder zu merken. Dabei handelt es sich um jeweils 1 - 4 Gesichter oder Orte.')]),
        OrderedDict([('instructions', 'Am Ende eines jeden Versuchsdurchgangs solltest du beantworten ob ein angezeigtes Probebild Teil der zu merkenden Bilder ist.')]),
        OrderedDict([('instructions', 'Drücke dazu bitte die linke Taste (Zeigefinger), falls das Probebild eines der zu merkenden Bilder ist.')]),
        OrderedDict([('instructions', 'Drücke dazu bitte die rechte Taste (Mittelfinger), falls das Probebild NICHT zu den zu merkenden Bildern gehört.')]),
        OrderedDict([('instructions', 'Während Du dir die Bilder merkst, versuche bitte sie dir aktiv vor deinem inneren Auge vorzustellen.')]),
        OrderedDict([('instructions', 'Nun kommt ein Beispieldurchgang.')])]
      Routine Instr1
    LoopTerminator instructionLoop
    LoopInitiator trials_Instr loopType="TrialHandler"
      Selected rows = 0
      conditionsFile = trials_Int.csv
      loopType = sequential
      nReps = 1
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      Routine trial_Instr
      Routine masks_Instr
      Routine delayInst
      Routine responseInst
      Routine reward
    LoopTerminator trials_Instr
    LoopInitiator repeat_InstrTrials loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine reminderButtons
      LoopInitiator trials_instr2 loopType="TrialHandler"
        Selected rows = 1:9
        conditionsFile = trials_Int.csv
        loopType = random
        nReps = 1
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        Routine trialBegBlank_practice
        Routine trial_practice
        Routine feedback_2
      LoopTerminator trials_instr2
      Routine feedbackTest
    LoopTerminator repeat_InstrTrials
  LoopTerminator dontSkipInstructions
  LoopInitiator runReal loopType="TrialHandler"
    loopType = random
    nReps = $expInfo['realRuns']
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    Routine Before_run
    Routine blankStart
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $expInfo['runNumber']
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine trialEndBlank
    LoopTerminator trials
    Routine blankEnd
    Routine feedback_Run
  LoopTerminator runReal
